PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.9
  Window size (pixels) = [1920, 1080]
  expName = bounceTest
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        bounceDir = 0
        bouncePathX = -0.7
        bouncePathY = -0.5
        trialCursor.vertices = [(-0.2,-0.05),(-0.2,0.05),(0.2,0.05),(0.2,-0.05)]
        cursorPosX = trialMouse.getPos()[0];
        cursorPosY = trialMouse.getPos()[1];
      Each Frame:
        cursorPosX = trialMouse.getPos()[0];
        cursorPosY = trialMouse.getPos()[1];

        if (bounceDir == 0):
            bouncePathX = bouncePathX + 0.5*0.02
            bouncePathY = bouncePathY + 1.0*0.02
        elif (bounceDir == 1):
            bouncePathX = bouncePathX + 0.5*0.02
            bouncePathY = bouncePathY - 1.0*0.02

        if ((bouncePathX >= -0.2) and (bouncePathY >= 0.5)) and (bounceDir == 0):
            bounceDir = 1
        elif (trialCircle.contains(trialMouse)) and (bounceDir == 1):
            #bounceDir = 0
            #bouncePathX = -0.7
            #bouncePathY = -0.5
            continueRoutine = False
        elif (bouncePathX <= -1.0) or (bouncePathY <= -1.0) or (bouncePathX >= 1.0) or (bouncePathY >= 1.0):
            #bounceDir = 0
            #bouncePathX = -0.7
            #bouncePathY = -0.5
            continueRoutine = False
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialCircle
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (bouncePathX, bouncePathY)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      pos [set every frame] = (cursorPosX, cursorPosY)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Catch the ball as many times as you like.
        There is a 3 second delay from when you catch/miss the ball to when it starts again.
        Use 'space' during the trials to exit the trials.
        Press 'space' to to continue.
    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix
    TextComponent fix1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Start in 3
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    TextComponent fix2
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = Start in 2
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    TextComponent fix3
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = Start in 1
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Flow
  Routine setup
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine fix
    Routine trial
  LoopTerminator trials
  Routine end
